PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mouse_untitled
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Routines
  Routine trial
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.1
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
