PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = star
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
